PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = EntropyIllusion
  keyboardBackend = ioHub
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Routines
  Routine Reference
    ImageComponent image_phaseA
      image [set every repeat] = $imageA
      pos [set every repeat] = positionA
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    ImageComponent fixation_cross
      image = images/cross.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent RandomRow
      Code Type = Auto->JS
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      Before Experiment:
        from math import floor
      Begin Experiment:
        #Rows of the Loop Selection Sheet
        maxRows = 4
        #Substract a small number to avoid floor(maxRows)==maxRows
        maxRows = maxRows-0.0001
        # Returns values only between 0 and maxRows
        sheetRowIndex = str(floor(random()*(maxRows)))
        print(sheetRowIndex)
  Routine Probe
    ImageComponent imagePhaseB
      image [set every repeat] = $imageB
      pos [set every repeat] = positionA
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.05
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    ImageComponent fixation_cross_2
      image = images/cross.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  LoopInitiator centralLoop loopType="TrialHandler"
    Selected rows = $sheetRowIndex
    conditionsFile = EntropyConditions1.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'positionA': (-0.5, 0), 'imageA': 'images/dot_array1.png', 'imageB': 'images/probeImage1.png'},
      {'positionA': (0.5, 0), 'imageA': 'images/dot_array1.png', 'imageB': 'images/probeImage1.png'},
      {'positionA': (-0.5, 0), 'imageA': 'images/dot_array2.png', 'imageB': 'images/probeImage2.png'},
      {'positionA': (0.5, 0), 'imageA': 'images/dot_array2.png', 'imageB': 'images/probeImage2.png'}]
    Routine Reference
    Routine Probe
  LoopTerminator centralLoop
