PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PilotExperiment
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent InstructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Rate the visibility of the briefly presented dot array in a scale from 1 to 4:

        (1) No visible dot array
        (2) Just a glimpse of the dot array
        (3) The dot array was detected but not completely visible
        (4) The dot array was clearly and completely visible


        Press any key to continue
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent mask
      image [set every repeat] = $mask_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0125
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    ImageComponent dot_array
      image [set every repeat] = $stimuli_file
      size = (0.5, 0.5)
      startVal [time (s)] = $soa_time
      stopVal [duration (s)] = 0.05
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  Routine Rating
    KeyboardComponent rating_resp
      allowedKeys = '1', '2', '3', '4', 'num_1', 'num_2', 'num_3', 'num_4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent rating_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press 1, 2, 3, or 4 in accordance with visibility rating
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = PilotConditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stimuli_file': 'images/dot_array1.png', 'mask_file': 'images/mask.png', 'soa': 0.147, 'mask_appears': 'yes', 'mask_appearance_time': 0.0125, 'soa_time': 0.1595},
      {'stimuli_file': 'images/transparent_image.png', 'mask_file': 'images/mask.png', 'soa': 0.187, 'mask_appears': 'yes', 'mask_appearance_time': 0.0125, 'soa_time': 0.1995},
      {'stimuli_file': 'images/dot_array1.png', 'mask_file': 'images/mask.png', 'soa': 0.227, 'mask_appears': 'yes', 'mask_appearance_time': 0.0125, 'soa_time': 0.23950000000000002},
      {'stimuli_file': 'images/dot_array2.png', 'mask_file': 'images/transparent_image.png', 'soa': 0.26, 'mask_appears': 'no', 'mask_appearance_time': 0.0125, 'soa_time': 0.2725},
      {'stimuli_file': 'images/dot_array1.png', 'mask_file': 'images/mask.png', 'soa': 0.147, 'mask_appears': 'yes', 'mask_appearance_time': 0.0125, 'soa_time': 0.1595},
      {'stimuli_file': 'images/dot_array2.png', 'mask_file': 'images/mask.png', 'soa': 0.187, 'mask_appears': 'yes', 'mask_appearance_time': 0.0125, 'soa_time': 0.1995},
      {'stimuli_file': 'images/transparent_image.png', 'mask_file': 'images/transparent_image.png', 'soa': 0.227, 'mask_appears': 'yes', 'mask_appearance_time': 0.0125, 'soa_time': 0.23950000000000002},
      {'stimuli_file': 'images/dot_array2.png', 'mask_file': 'images/mask.png', 'soa': 0.26, 'mask_appears': 'no', 'mask_appearance_time': 0.0125, 'soa_time': 0.2725}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
    Routine trial
    Routine Rating
  LoopTerminator trials
