PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TextResponse
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine trial_2
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = Type a response
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    TextComponent endButton
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Click here to continue
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    MouseComponent mouse
      clickable = endButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial_2
  LoopTerminator trials
