PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = posner
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent cue
      image [set every repeat] = $cue_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    ImageComponent target
      image = images/target.png
      pos [set every repeat] = (target_x, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
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    MouseComponent resp
      clickable = target
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.7
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  Routine feedback
    TextComponent feedbackTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'RT was: ' + str(round(resp.time[0], 3))
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = posnerConditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_left.png', 'target_x': -0.5, 'is_valid': 'valid'},
      {'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_left.png', 'target_x': -0.5, 'is_valid': 'valid'},
      {'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_left.png', 'target_x': -0.5, 'is_valid': 'valid'},
      {'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_left.png', 'target_x': -0.5, 'is_valid': 'valid'},
      {'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_right.png', 'target_x': 0.5, 'is_valid': 'valid'},
      {'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_right.png', 'target_x': 0.5, 'is_valid': 'valid'},
      {'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_right.png', 'target_x': 0.5, 'is_valid': 'valid'},
      {'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_right.png', 'target_x': 0.5, 'is_valid': 'valid'},
      {'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_left.png', 'target_x': 0.5, 'is_valid': 'invalid'},
      {'cue_file': 'C:/Users/kerry/Documents/Kyle Files/PsychoPyProjects/posnerFiles/images/arrow_right.png', 'target_x': -0.5, 'is_valid': 'invalid'}]
    Routine trial
    Routine feedback
  LoopTerminator trials
