PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = stroopExperiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember, choose the color of the letters, ignoring the word:

        left = red
        down = green
        right = blue
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'red', 'color': 'red', 'congruent': 1, 'corrAns': 'left'},
      {'word': 'red', 'color': 'green', 'congruent': 0, 'corrAns': 'down'},
      {'word': 'green', 'color': 'green', 'congruent': 1, 'corrAns': 'down'},
      {'word': 'green', 'color': 'blue', 'congruent': 0, 'corrAns': 'right'},
      {'word': 'blue', 'color': 'blue', 'congruent': 1, 'corrAns': 'right'},
      {'word': 'blue ', 'color': 'red', 'congruent': 0, 'corrAns': 'left'}]
    Routine trial
  LoopTerminator trials
